PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  color = $[1,1,1]
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = percepttest
  Screen = 1
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Routines
  Routine end
    TextComponent text_2
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Thank you for your participation.

        The purpose of this experiment was to see if taking photos affects how well you remember what you saw.
        Other studies have had mixed results. Some say your memory is better for the things you photograph, and others say it is better for the things you did not photograph.
        Our goal is to get a better idea of what is going on when you take a picture of something.

        Please let the experimenter know if you would like a copy of this screen emailed to you.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testINSconcep
    TextComponent text_12
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will see four images presented on the screen.

        Press the key that corresponds to the concept that you previously viewed.

        Press space to continue.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine studyNOcamera
    ImageComponent image_5
      startVal [time (s)] = 0.0
      image [set every repeat] = $picture
      size = (1,1.25)
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        all_rows = range(32)
        shuffle(all_rows)  # randomize order
  Routine testINSpercep
    TextComponent text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        You will see three images presented on the screen.


        Press the key that corresponds to the image that you previously viewed.


        Press the space bar to continue.
    KeyboardComponent advance
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine distractor
    TextComponent text_14
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You are now finished with this portion of the experiment.

        Please notify the experimenter that you have finished.
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'r'
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent text_15
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        We are interested to see how you experience art.


        We have put together an assortment of art for you to view at your own pace.

        For some pieces, you will be asked to take a photo.
        For other pieces, you will just be viewing them.

        Press the space bar to continue.
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine testCONCEP
    KeyboardComponent key_resp_4
      correctAns = $corrAnsC
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','space'
      startVal [time (s)] = 0.0
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    ImageComponent image1
      pos = (-.7, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $alt1
      size = (0.4688,0.75)
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    ImageComponent image_2
      pos = (-.25, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $alt2
      size = (0.4688,0.75)
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    ImageComponent image_3
      pos = (.25, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $alt3
      size = (0.4688,0.75)
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    ImageComponent image_4
      pos = (.7, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $alt4
      size = (0.4688,0.75)
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    TextComponent text_8
      color = black
      text = 1
      pos = (-.7, -.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_9
      color = black
      text = 2
      pos = (-.25, -.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_10
      color = black
      text = 3
      pos = (.25, -.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_11
      color = black
      text = 4
      pos = (.7, -.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine NOcameraINS
    TextComponent text_7
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        You will be viewing an assortment of artwork at your own pace.

        When you are ready to move on to the next piece of art, press the space bar.


         Press the space bar to continue.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine studyCAMERA
    ImageComponent image
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $picture
      size [set every repeat] = (1,1.25)
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = black
      text = Please take a picture.
      pos = (0,-.7)
      startVal [time (s)] = 1
      letterHeight = 0.05
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  Routine testPERCEP
    ImageComponent choice1
      pos = (-.7,0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $one
      size = (0.56,0.7)
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    ImageComponent choice2
      startVal [time (s)] = 0.0
      image [set every repeat] = $two
      size = (0.56,0.7)
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    ImageComponent choice3
      pos = (.7, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $three
      size = (0.56,0.7)
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    KeyboardComponent response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = '1','2','3'
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent text_4
      color = black
      text = 1
      pos = (-.7, -.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_5
      color = black
      text = 2
      pos = (0, -.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_6
      color = black
      text = 3
      pos = (.7, -.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine cameraINS
    TextComponent text_3
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        You will be viewing an assortment of artwork at your own pace.

        Please take a picture of each piece of art before moving on to the next piece.

        When you are ready to move on to the next piece of art, press the space bar.


        Press the space bar to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'loop1_reps': 0, 'loop2_reps': 1},
      {'loop1_reps': 1, 'loop2_reps': 0}]
    LoopInitiator trials_5 loopType="TrialHandler"
      loopType = random
      nReps = $loop1_reps
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      Routine NOcameraINS
      LoopInitiator trials_4 loopType="TrialHandler"
        conditionsFile = conditions.xlsx
        loopType = random
        nReps = 1
        Selected rows = $all_rows[:16]
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        conditions:
          [{'picture': u'leaves1.jpg', 'concept': u'leaves', 'three': u'leaves3.jpg', 'two': u'leaves2.jpg', 'corrAns': 1, 'one': u'leaves1.jpg'},
          {'picture': u'lemon2.jpg', 'concept': u'lemon', 'three': u'lemon1.jpg', 'two': u'lemon2.jpg', 'corrAns': 2, 'one': u'lemon3.jpg'},
          {'picture': u'bird3.jpg', 'concept': u'bird', 'three': u'bird3.jpg', 'two': u'bird1.jpg', 'corrAns': 3, 'one': u'bird2.jpg'},
          {'picture': u'cat1.jpg', 'concept': u'cat', 'three': u'cat3.jpg', 'two': u'cat2.jpg', 'corrAns': 1, 'one': u'cat1.jpg'},
          {'picture': u'ship2.jpg', 'concept': u'ship', 'three': u'ship3.jpg', 'two': u'ship1.jpg', 'corrAns': 1, 'one': u'ship2.jpg'},
          {'picture': u'bike3.jpg', 'concept': u'bike', 'three': u'bike1.jpg', 'two': u'bike2.jpg', 'corrAns': 1, 'one': u'bike3.jpg'},
          {'picture': u'bear1.jpg', 'concept': u'bear', 'three': u'bear3.jpg', 'two': u'bear2.jpg', 'corrAns': 1, 'one': u'bear1.jpg'},
          {'picture': u'shoes2.jpg', 'concept': u'shoes', 'three': u'shoes3.jpg', 'two': u'shoes2.jpg', 'corrAns': 2, 'one': u'shoes1.jpg'},
          {'picture': u'apples3.jpg', 'concept': u'apples', 'three': u'apples1.jpg', 'two': u'apples2.jpg', 'corrAns': 1, 'one': u'apples3.jpg'},
          {'picture': u'rabbit1.jpg', 'concept': u'rabbit', 'three': u'rabbit3.jpg', 'two': u'rabbit1.jpg', 'corrAns': 2, 'one': u'rabbit2.jpg'},
          {'picture': u'deer2.jpg', 'concept': u'deer', 'three': u'deer3.jpg', 'two': u'deer2.jpg', 'corrAns': 2, 'one': u'deer1.jpg'}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
        Routine studyNOcamera
      LoopTerminator trials_4
    LoopTerminator trials_5
    LoopInitiator trials_6 loopType="TrialHandler"
      loopType = random
      nReps = $loop2_reps
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      Routine cameraINS
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = conditions.xlsx
        loopType = random
        nReps = 1
        Selected rows = $all_rows[16:]
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        conditions:
          [{'picture': u'leaves1.jpg', 'concept': u'leaves', 'three': u'leaves3.jpg', 'two': u'leaves2.jpg', 'corrAns': 1, 'one': u'leaves1.jpg'},
          {'picture': u'lemon2.jpg', 'concept': u'lemon', 'three': u'lemon1.jpg', 'two': u'lemon2.jpg', 'corrAns': 2, 'one': u'lemon3.jpg'},
          {'picture': u'bird3.jpg', 'concept': u'bird', 'three': u'bird3.jpg', 'two': u'bird1.jpg', 'corrAns': 3, 'one': u'bird2.jpg'},
          {'picture': u'cat1.jpg', 'concept': u'cat', 'three': u'cat3.jpg', 'two': u'cat2.jpg', 'corrAns': 1, 'one': u'cat1.jpg'},
          {'picture': u'ship2.jpg', 'concept': u'ship', 'three': u'ship3.jpg', 'two': u'ship1.jpg', 'corrAns': 1, 'one': u'ship2.jpg'},
          {'picture': u'bike3.jpg', 'concept': u'bike', 'three': u'bike1.jpg', 'two': u'bike2.jpg', 'corrAns': 1, 'one': u'bike3.jpg'},
          {'picture': u'bear1.jpg', 'concept': u'bear', 'three': u'bear3.jpg', 'two': u'bear2.jpg', 'corrAns': 1, 'one': u'bear1.jpg'},
          {'picture': u'shoes2.jpg', 'concept': u'shoes', 'three': u'shoes3.jpg', 'two': u'shoes2.jpg', 'corrAns': 2, 'one': u'shoes1.jpg'},
          {'picture': u'apples3.jpg', 'concept': u'apples', 'three': u'apples1.jpg', 'two': u'apples2.jpg', 'corrAns': 1, 'one': u'apples3.jpg'},
          {'picture': u'rabbit1.jpg', 'concept': u'rabbit', 'three': u'rabbit3.jpg', 'two': u'rabbit1.jpg', 'corrAns': 2, 'one': u'rabbit2.jpg'},
          {'picture': u'deer2.jpg', 'concept': u'deer', 'three': u'deer3.jpg', 'two': u'deer2.jpg', 'corrAns': 2, 'one': u'deer1.jpg'}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
        Routine studyCAMERA
      LoopTerminator trials
    LoopTerminator trials_6
  LoopTerminator trials_3
  Routine distractor
  Routine testINSpercep
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine testPERCEP
  LoopTerminator trials_2
  Routine end
