PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {u'participant': u'', u'condition': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = recalltest
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Routines
  Routine end
    TextComponent text_2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation.

        The purpose of this experiment was to see if taking photos affects how well you remember what you saw.
        Other studies have had mixed results. Some say your memory is better for the things you photograph, and others say it is better for the things you did not photograph.
        Our goal is to get a better idea of what is going on when you take a picture of something.

        Please let the experimenter know if you would like a copy of this screen emailed to you.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testINSconcep
    TextComponent text_12
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please notify the experimenter when you are finished with this portion of the experiment.
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    KeyboardComponent key_resp_5
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine studyNOcamera
    ImageComponent image_5
      image [set every repeat] = $photo
      size = (1,1.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testINSpercep
    TextComponent text
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will see three images presented on the screen.


        Press the key that corresponds to the image that you previously viewed.


        Press the space bar to continue.
    KeyboardComponent advance
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine distractor
    TextComponent text_14
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You are now finished with this portion of the experiment.

        Please notify the experimenter that you have finished.
    KeyboardComponent key_resp_9
      allowedKeys = 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent text_15
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        We are interested to see how you experience art.


        We have put together an assortment of art for you to view at your own pace.

        For some pieces, you will be asked to take a photo.
        For other pieces, you will just be viewing them.

        Press the space bar to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
      Begin Experiment:
        if expInfo['condition']=='1':
            loop1_reps = [1,0]
            loop2_reps = [0,1]
        else:
            loop1_reps = [0,1]
            loop2_reps = [1,0]

        if expInfo['condition'] == '1':
            countercondition = 'camera 2'
            thisExp.addData('countercondition', countercondition)
        else:
            countercondition = 'camera 1'
            thisExp.addData('countercondition', countercondition)

        import copy

        all_rows = range(32)
        shuffle(all_rows)
  Routine testCONCEP
    KeyboardComponent key_resp_4
      allowedKeys = '1','2','3','4','space'
      correctAns = $corrAnsC
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image1
      image [set every repeat] = $alt1
      pos = (-.7, 0)
      size = (0.4688,0.75)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $alt2
      pos = (-.25, 0)
      size = (0.4688,0.75)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $alt3
      pos = (.25, 0)
      size = (0.4688,0.75)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image [set every repeat] = $alt4
      pos = (.7, 0)
      size = (0.4688,0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      color = black
      letterHeight = 0.1
      pos = (-.7, -.4)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_9
      color = black
      letterHeight = 0.1
      pos = (-.25, -.4)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_10
      color = black
      letterHeight = 0.1
      pos = (.25, -.4)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent text_11
      color = black
      letterHeight = 0.1
      pos = (.7, -.4)
      startVal [time (s)] = 0.0
      text = 4
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  Routine NOcameraINS
    TextComponent text_7
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will be viewing an assortment of artwork at your own pace.

        When you are ready to move on to the next piece of art, press the space bar.


         Press the space bar to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine studyCAMERA
    ImageComponent image
      image [set every repeat] = $photo
      size [set every repeat] = (1,1.6)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = black
      letterHeight = 0.05
      pos = (0,-.85)
      startVal [time (s)] = 1
      text = Please take a picture.
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  Routine testPERCEP
    ImageComponent choice1
      image [set every repeat] = $one
      pos = (-.7,0)
      size = (0.56,0.7)
      startVal [time (s)] = 0.0
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    ImageComponent choice2
      image [set every repeat] = $two
      size = (0.56,0.7)
      startVal [time (s)] = 0.0
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    ImageComponent choice3
      image [set every repeat] = $three
      pos = (.7, 0)
      size = (0.56,0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent response
      allowedKeys [set every repeat] = '1','2','3'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    TextComponent text_4
      color = black
      letterHeight = 0.1
      pos = (-.7, -.5)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent text_5
      color = black
      letterHeight = 0.1
      pos = (0, -.5)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent text_6
      color = black
      letterHeight = 0.1
      pos = (.7, -.5)
      startVal [time (s)] = 0.0
      text = 3
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  Routine cameraINS
    TextComponent text_3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will be viewing an assortment of artwork at your own pace.

        Please take a picture of each piece of art before moving on to the next piece.

        When you are ready to move on to the next piece of art, press the space bar.


        Press the space bar to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = sequential
    nReps = $loop1_reps[0]
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    Routine NOcameraINS
    LoopInitiator trials_4 loopType="TrialHandler"
      Selected rows = $all_rows[:16]
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'photo': 'leaves1.jpg', 'concept': 'leaves'},
        {'photo': 'bird3.jpg', 'concept': 'bird'},
        {'photo': 'cat1.jpg', 'concept': 'cat'},
        {'photo': 'bike3.jpg', 'concept': 'bike'},
        {'photo': 'bear1.jpg', 'concept': 'bear'},
        {'photo': 'apples4.jpg', 'concept': 'apples'},
        {'photo': 'lion1.jpg', 'concept': 'lion'},
        {'photo': 'elephant3.jpg', 'concept': 'elephant'},
        {'photo': 'train1.jpg', 'concept': 'train'},
        {'photo': 'banana1.jpg', 'concept': 'banana'},
        {'photo': 'strawberries4.jpg', 'concept': 'strawberries'},
        {'photo': 'tree1.jpg', 'concept': 'tree'},
        {'photo': 'fish3.jpg', 'concept': 'fish'},
        {'photo': 'turtle3.jpg', 'concept': 'turtle'},
        {'photo': 'horse2.jpg', 'concept': 'horse'},
        {'photo': 'bench1.jpg', 'concept': 'bench'},
        {'photo': 'book1.jpg', 'concept': 'book'},
        {'photo': 'bridge1.jpg', 'concept': 'bridge'},
        {'photo': 'car1.jpg', 'concept': 'car'},
        {'photo': 'fox1.jpg', 'concept': 'fox'},
        {'photo': 'frog1.jpg', 'concept': 'frog'},
        {'photo': 'phone1.jpg', 'concept': 'phone'},
        {'photo': 'pineapple1.jpg', 'concept': 'pineapple'},
        {'photo': 'whale1.jpg', 'concept': 'whale'},
        {'photo': 'pie1.jpg', 'concept': 'pie'},
        {'photo': 'rabbit1.jpg', 'concept': 'rabbit'},
        {'photo': 'camel1.jpg', 'concept': 'camel'},
        {'photo': 'mouse2.jpg', 'concept': 'mouse'},
        {'photo': 'chairs2.jpg', 'concept': 'chairs'},
        {'photo': 'carrots1.jpg', 'concept': 'carrots'},
        {'photo': 'alligator1.jpg', 'concept': 'alligator'},
        {'photo': 'grapes1.jpg', 'concept': 'grapes'}]
      Routine studyNOcamera
    LoopTerminator trials_4
  LoopTerminator trials_5
  LoopInitiator trials_6 loopType="TrialHandler"
    loopType = sequential
    nReps = $loop2_reps[0]
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    Routine cameraINS
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $all_rows[16:]
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'photo': 'leaves1.jpg', 'concept': 'leaves'},
        {'photo': 'bird3.jpg', 'concept': 'bird'},
        {'photo': 'cat1.jpg', 'concept': 'cat'},
        {'photo': 'bike3.jpg', 'concept': 'bike'},
        {'photo': 'bear1.jpg', 'concept': 'bear'},
        {'photo': 'apples4.jpg', 'concept': 'apples'},
        {'photo': 'lion1.jpg', 'concept': 'lion'},
        {'photo': 'elephant3.jpg', 'concept': 'elephant'},
        {'photo': 'train1.jpg', 'concept': 'train'},
        {'photo': 'banana1.jpg', 'concept': 'banana'},
        {'photo': 'strawberries4.jpg', 'concept': 'strawberries'},
        {'photo': 'tree1.jpg', 'concept': 'tree'},
        {'photo': 'fish3.jpg', 'concept': 'fish'},
        {'photo': 'turtle3.jpg', 'concept': 'turtle'},
        {'photo': 'horse2.jpg', 'concept': 'horse'},
        {'photo': 'bench1.jpg', 'concept': 'bench'},
        {'photo': 'book1.jpg', 'concept': 'book'},
        {'photo': 'bridge1.jpg', 'concept': 'bridge'},
        {'photo': 'car1.jpg', 'concept': 'car'},
        {'photo': 'fox1.jpg', 'concept': 'fox'},
        {'photo': 'frog1.jpg', 'concept': 'frog'},
        {'photo': 'phone1.jpg', 'concept': 'phone'},
        {'photo': 'pineapple1.jpg', 'concept': 'pineapple'},
        {'photo': 'whale1.jpg', 'concept': 'whale'},
        {'photo': 'pie1.jpg', 'concept': 'pie'},
        {'photo': 'rabbit1.jpg', 'concept': 'rabbit'},
        {'photo': 'camel1.jpg', 'concept': 'camel'},
        {'photo': 'mouse2.jpg', 'concept': 'mouse'},
        {'photo': 'chairs2.jpg', 'concept': 'chairs'},
        {'photo': 'carrots1.jpg', 'concept': 'carrots'},
        {'photo': 'alligator1.jpg', 'concept': 'alligator'},
        {'photo': 'grapes1.jpg', 'concept': 'grapes'}]
      Routine studyCAMERA
    LoopTerminator trials
  LoopTerminator trials_6
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = $loop1_reps[1]
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    Routine NOcameraINS
    LoopInitiator trials_3 loopType="TrialHandler"
      Selected rows = $all_rows[:16]
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine studyNOcamera
    LoopTerminator trials_3
  LoopTerminator trials_2
  LoopInitiator trials_8 loopType="TrialHandler"
    loopType = sequential
    nReps = $loop2_reps[1]
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    Routine cameraINS
    LoopInitiator trials_7 loopType="TrialHandler"
      Selected rows = $all_rows[16:]
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine studyCAMERA
    LoopTerminator trials_7
  LoopTerminator trials_8
  Routine distractor
  Routine end
